PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = DDK_task
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Routines
  Routine trial
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please begin the task now.

        Press spacebar when you have completed the task.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    SoundComponent sound_4
      sound = begin_task_text.wav
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent text_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For this task, you will take a deep breath and then repeat the word “puhtuhkuh” as quickly and as accurately as you can until you run out of breath.

        You will practice once.

        It should sound like this “puhtuhkuh-puhtuhkuh-puhtuhkuh…”

        Press spacebar to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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    SoundComponent sound_1
      sound = DDK_instructions.wav
      startVal [time (s)] = 0.0
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  Routine practice
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please practice the task now.

        Press spacebar when you have completed the task.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    SoundComponent sound_2
      sound = practice_text.wav
      startVal [time (s)] = 0.0
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  Routine start_instructions
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice test is complete.

        For the test, please remember to say “puhtuhkuh” for as long as you can without taking any extra breaths.

        Press spacebar to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
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    SoundComponent sound_3
      sound = DDK_practice_comp_test_instr.wav
      startVal [time (s)] = 0.0
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  Routine End_instructions
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you. You have completed this task.
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    SoundComponent sound_5
      sound = task_complete.wav
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine practice
  Routine start_instructions
  Routine trial
  Routine End_instructions
